<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
      
        <!-- Noise prewhitening -->
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>

        </gadget>

        <!-- Convert gradient waveforms into trajectories-->
        <gadget>
            <name>WaveformToTrajectory</name>
            <dll>nhlbi_gt_toolbox</dll>
            <classname>WaveformToTrajectory</classname>
            <property><name>perform_GIRF</name><value>true</value></property>
            <property><name>GIRF_folder</name><value>/opt/data/GIRF/</value></property>
            <property><name>generateTraj</name><value>false</value></property>
        </gadget>

        <gadget>
                <name>RemoveSpiralOversampling</name>
                <dll>nhlbi_gt_toolbox</dll>
                <classname>RemoveSpiralOversampling</classname>
        </gadget>
        
        
       <external>
            <execute name="BinningGadget" target="BinningGadget" type="python"/>
            <property><name>stableBinning</name><value>false</value></property>
            <configuration>
                <property name="stableBinning"         value="True"/>
                <property name="numBins"         value="1"/> <!--Set this way because we have 3 gpus-->
            </configuration>
        </external> 

        <gadget>
            <name>ImagetoVector</name>
            <dll>nhlbi_gt_toolbox</dll>
            <classname>ImagetoVector</classname>
        </gadget> 

        
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>PCACoilGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>CoilReductionGadget</classname>
            <property name="coils_out" value="10"/>
        </gadget>


        <gadget>
            <name>Spiral_cgsense</name>
            <dll>nhlbi_gt_toolbox</dll>
            <classname>Spiral_cgsense</classname>
            <property><name>iterations</name><value>2</value></property>
            <property><name>iterations_inner</name><value>2</value></property>
            <property><name>lambda_spatial</name><value>0.01</value></property>
            <property><name>tolSense</name><value>1e-3</value></property>
            <property><name>fwidth</name><value>24</value></property>
            <property><name>fsigma</name><value>1.2</value></property>
            <property><name>ftype</name><value>none</value></property>
            <property><name>kappa</name><value>0.00</value></property>
            <property><name>Debug</name><value>0</value></property>
            <property><name>NoSense</name><value>0</value></property><!-- We want to use sense but its not stable and has GPU memory beef -->
            <property><name>norm</name><value>2.0</value></property>
            <property><name>doConcomitantFieldCorrection</name><value>true</value></property>
        </gadget>

        <gadget>
            <name>ImageArraySplit</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageArraySplitGadget</classname>
        </gadget>

        <gadget>
            <name>ComplexToFloatAttrib</name>
            <dll>gadgetron_mricore</dll>
            <classname>ComplexToFloatGadget</classname>
        </gadget>
        
         <gadget>
            <name>AutoScaleGadget</name>
            <dll>gadgetron_mricore</dll>
            <classname>AutoScaleGadget</classname>
        </gadget> 

        <gadget>
            <name>FloatToShort</name>
            <dll>gadgetron_mricore</dll>
            <classname>FloatToUShortGadget</classname>
        </gadget>

        <gadget>
            <name>ImageFinish</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageFinishGadget</classname>
        </gadget>
        
    </stream>
</configuration>